PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = v1
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Routines
  Routine trial
    CodeComponent peerCommunication
      Code Type = JS
      Before JS Experiment:
        import { v4 as uuidv4 } from 'uuid';
        import Peer from 'peerjs';

        // var experimentClientId = uuidv4();
        var experimentClientId = 'testtestgusserver'
        var experimentClientPeer = new Peer(experimentClientId);
      Begin JS Experiment:
        var conn = peer.connect('testtestgusclient');
        conn.on('open', () => {
          conn.send('hi!');
        });

        var dataLog = [];
        var trialsElapsed = 0;

        peer.on('connection', (conn) => {
          conn.on('data', (data) => {
            // Will print 'hi!'
            console.log(data);
            dataLog.push(data)
            console.log('DataLog: ', dataLog)
          });
          conn.on('open', () => {
            conn.send('hello!');
          });
        });
      Begin JS Routine:
        trialsElapsed = trialsElapsed + 1;
    TextComponent randLetter
      letterHeight = 10
      startVal [time (s)] = 0.0
      stopVal [condition] = $len(dataLog) == trialsElapsed
      text [set every repeat] = random.choice(list(‘abcdefg’))
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
